# Generated by Configurator on Tue Sep 03 11:26:56 PDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM11,SerialManager,COM11
Device,COM12,SerialManager,COM12
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,XYStage,Prior,XYStage
Device,Spectra,LumencorSpectra,Spectra

# Pre-init settings for devices
Property,COM11,AnswerTimeout,500.0000
Property,COM11,BaudRate,9600
Property,COM11,DataBits,8
Property,COM11,DelayBetweenCharsMs,0.0000
Property,COM11,Fast USB to Serial,Disable
Property,COM11,Handshaking,Off
Property,COM11,Parity,None
Property,COM11,StopBits,1
Property,COM11,Verbose,1
Property,COM12,AnswerTimeout,500.0000
Property,COM12,BaudRate,9600
Property,COM12,DataBits,8
Property,COM12,DelayBetweenCharsMs,0.0000
Property,COM12,Fast USB to Serial,Disable
Property,COM12,Handshaking,Off
Property,COM12,Parity,None
Property,COM12,StopBits,1
Property,COM12,Verbose,1
Property,XYStage,Port,COM11
Property,Spectra,Port,COM12
Property,Spectra,SetLE_Type,Spectra

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,Spectra
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Red_Intensity
# Preset: NewPreset
ConfigGroup,Red_Intensity,NewPreset,Spectra,Red_Level,100


# Group: Green
# Preset: NewPreset
ConfigGroup,Green,NewPreset,Spectra,Green_Enable,0


# Group: Red
# Preset: NewPreset
ConfigGroup,Red,NewPreset,Spectra,Red_Enable,0


# Group: Blue_Intensity
# Preset: NewPreset
ConfigGroup,Blue_Intensity,NewPreset,Spectra,Blue_Level,100


# Group: Green_Intensity
# Preset: NewPreset
ConfigGroup,Green_Intensity,NewPreset,Spectra,Green_Level,100


# Group: Blue
# Preset: NewPreset
ConfigGroup,Blue,NewPreset,Spectra,Blue_Enable,0



# PixelSize settings

